PsychoPy2experiment version="1.90.2"
Settings
  expName = pilot_RL
  Experiment info = {'participant': '99', 'participant_gender': 'F', 'skip_practice': 'False', 'skip_ratings': 'False'}
  Full-screen window = True
  Window size (pixels) = [1440, 900]
  Screen = 1
  Monitor = mbp
  Units = deg
  Data filename = u'logs/sub-%s/sub-%s_events' % (expInfo['participant'], expInfo['participant'])
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Routines
  Routine choice_trial
    CodeComponent feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
        feedback_txt_opacity = 1
      End Routine:
        if real_response.keys in (None, []):
            feedback_sign_opacity = 0
            feedback_txt_opacity = 1
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
        elif real_response.corr:
            feedback_txt = ''
            feedback_sign_opacity = 1
            feedback_txt_opacity = 0
            feedback_ori = 0
            feedback_color = 'Green'
        elif not real_response.corr:
            feedback_txt = ''
            feedback_sign_opacity = 1
            feedback_txt_opacity = 0
            feedback_ori = 45
            feedback_color = 'Red'
    ImageComponent first_face_img
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (8, 10)
      image [set every repeat] = $first_face
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    ImageComponent second_face_img
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      size = (8, 10)
      image [set every repeat] = $second_face
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    TextComponent response_prompt
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text = Please respond
      letterHeight = 1
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    KeyboardComponent real_response
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correct_resp
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    PolygonComponent polygon
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine pre_rating
    ImageComponent pre_rating_img
      startVal [time (s)] = 0.5
      pos = (0, 1)
      size = face_size
      image [set every repeat] = $stim_file
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    RatingScaleComponent pre_rating_scale
      startVal [time (s)] = 0.5
      marker = slider
      markerStart = 0
      showAccept = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.5
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    CodeComponent add_rating_to_df
      End Routine:
        rating_df.loc[stim_file, rating_attribute] = pre_rating_scale.getRating()
  Routine feedback
    PolygonComponent feedback_sign
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent feedback_written_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      color [set every repeat] = $feedback_color
      opacity [set every repeat] = $feedback_txt_opacity
      text [set every repeat] = $feedback_txt
      letterHeight = 1
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  Routine instruct_RL_1
    CodeComponent practice_skip
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_1 = """
        Dit is het begin van fase 2, waarin je een leer-taakje gaat doen.

        Deze taak zullen we uitgebreid uitleggen en
        die zal je eerst even oefenen voordat je
        gaat beginnen aan de echte taak.

        (Druk op een willekeurig toets om verder te gaan.)
        """
        else:
            practice_skip_txt_1 = """
        Nu ga je wederom een leer-taakje doen,
        maar net iets anders dan in de eerste sessie.

        (Druk op een willekeurig toets om verder te gaan.)
        """
    TextComponent instruct_RL_1_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_1
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent instruct_RL_1_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine pre_rating_instruct
    CodeComponent ratingscale_switch
      Begin Experiment:
        rating_df = pd.read_csv(stims_file, index_col='stim_file')
      Begin Routine:
        from custom_rating_scales import construct_rating_scale
        pre_rating_scale = construct_rating_scale(rating_attribute, low_high=[rating_low, rating_high], win=win)

        if not rating_question_details:
            rating_question_details = ''
    TextComponent pre_rating_instruct_common
      startVal [time (s)] = 0.0
      pos = (0, 8)
      letterHeight = (text_size + 0.5)
      wrapWidth = wrap_width
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      text:
        Bij de gezichten die straks in beeld komen
        moet je de volgende vraag beantwoorden:
    TextComponent pre_rating_instruct_txt
      startVal [time (s)] = 0.0
      pos = (0, 1)
      text [set every repeat] = $rating_question
      letterHeight = (text_size + 0.5)
      wrapWidth = wrap_width
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    TextComponent question_details_txt
      startVal [time (s)] = 0.0
      pos = (0, -3)
      text [set every repeat] = $rating_question_details
      letterHeight = text_size
      wrapWidth = wrap_width
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    TextComponent click_to_continue
      startVal [time (s)] = 0.0
      pos = (0, -8)
      text = (Als de vraag duidelijk is, druk dan op een willekeurige toets om te beginnen.)
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent pre_rating_instruct_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine begin_real_RL
    CodeComponent code_2
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_3 = """
        Dit was de oefentaak. Je begon met %i euro,
        maar je bent geeindigd met %.1f euro!

        Zoals je misschien wel gemerkt (geleerd)
        hebt, was Obama meer "waardevol" dan Clinton en
        was Bush meer "waardevol" dan Trump.

        Is alles duidelijk?
        Zo niet, laat de proefleider dit dan weten!

        (Druk op een willekeurige toets om verder te gaan.)""" % (custom_params['RL_params']['start_amount'], practice_money)
        else:
            if session_name == 'plusmin':
                tmp_txt = '%.1f euro VERLIEST' % custom_params['RL_params']['lose_amount']
            else:
                tmp_txt = 'GEEN geld verliest'

            practice_skip_txt_3 = """
        Ter herinnering: het enige verschil met de eerste sessie is
        dat je deze keer %s bij een fout antwoord!

        (Druk op een willekeurige toets om te beginnen met de taak!)
        """ % tmp_txt
    CodeComponent write_money_practice
      Begin Routine:
        with open(rewards_file, 'a') as rewards_file_f:
            rewards_file_f.write('Practice rewards: %.1f\n' % practice_money)
    TextComponent begin_real_RL_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_3
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent begin_real_RL_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_rating
    TextComponent instruct_rating_txt
      startVal [time (s)] = 0.0
      letterHeight = .4
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    KeyboardComponent instruct_rating_resp
      startVal [time (s)] = 0.0
      allowedKeys = 'f', 'j'
      store = nothing
      forceEndRoutine = True
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  Routine begin_session
    TextComponent begin_session_txt
      startVal [time (s)] = 0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """Dit is het begin van de leer-fase!

        (Druk op een willekeurige toets om verder te gaan.)""" % $number_str
    KeyboardComponent instruct_cont
      startVal [time (s)] = 0
      store = nothing
      forceEndRoutine = True
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  Routine thanks
    TextComponent thanks_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      letterHeight = text_size
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      text:
        Bedankt voor je deelname!
        De taak zal vanzelf afsluiten.
  Routine example_RL
    ImageComponent example_first_face
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (8, 10)
      image [set every repeat] = $first_face
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    ImageComponent example_second_face
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      size = (8, 10)
      image [set every repeat] = $second_face
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    PolygonComponent example_fix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      opacity = .1
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine example_scale
    ImageComponent practice_image
      startVal [time (s)] = 0.0
      pos = (0, 2)
      size = face_size
      image = stims/practice_stims/trump.jpg
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    TextComponent example_scale_hint
      startVal [time (s)] = 0.0
      pos = (0, 10)
      letterHeight = text_size
      wrapWidth = wrap_width
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      text:
        Dit is om te "oefenen"!

        (F = links, J = rechts, spatie = bevestig)
    RatingScaleComponent example_scale_1
      startVal [time (s)] = 0.0
      visualAnalogScale = True
      storeRating = False
      storeRatingTime = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.4
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      customize_everything:
        leftKeys=['f'],
        rightKeys=['j'],
        acceptKeys=['space'],
        mouseOnly=False,
        singleClick=False,
        labels=['Heel onaantrekkelijk', '', 'Heel aantrekkelijk'],
        low=-4,
        high=4,
        markerStart=0,
        showAccept=False,
        pos=(0, -0.5),
        scale='Hoe aantrekkelijk vind je dit gezicht?',
        tickMarks=[-4, 0, 4],
        stretch=1.3
  Routine instruct_RL_3
    CodeComponent code_5
      Begin Routine:
        if number_str == 'tweede':
            continueRoutine = False
    TextComponent instruct_RL_3_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """
        Je begint met %i euro, maar dit bedrag kan je dus opbouwen
        door te leren welke gezichten gekoppeld zijn met een hogere
        kans op beloning. Het gemiddelde bedrag dat je verdient tijdens
        de twee sessies mag je ook daadwerkelijk mee naar huis nemen
        (afgerond op de hele euro)!

        %s

        (Druk op een willekeurige toets om verder te gaan.)
        """ % ($custom_params['RL_params']['start_amount'], $RL_session_notice)
    KeyboardComponent instruct_RL_3_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_2
    TextComponent instruct_RL_2_txt_3
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        Tijdens deze taak zie je steeds twee gezichten tegelijkertijd.
        Eén van de gezichten is steeds ‘correct’ en de andere ‘incorrect’.
        In het begin zul je niet weten welke van de twee gezichten ‘correct’
        of ‘incorrect’ is.

        Probeer steeds zo accuraat mogelijk te raden welke van de twee
        gezichten ‘correct’ is, door deze met links ("F" toets)
        of rechts ("J" toets) te selecteren.

        (Druk op een willekeurige knop om verder te gaan.)
    KeyboardComponent instruct_RL_2_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_2
    TextComponent welcome_txt_2
      startVal [time (s)] = 0.0
      letterHeight = $text_size
      wrapWidth = wrap_width
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      text:
        In de eerste fase ga je gezichten beoordelen
        op een aantal eigenschappen (aantrekkelijkheid, betrouwbaarheid, etc.).
        Dit duurt zo'n 10 minuten.

        (Druk op een willekeurige toets om verder te gaan.)
    KeyboardComponent welcome_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_3
    TextComponent welcome_txt_3
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text:
        Je zal de gezichten beoordelen op een schaal.
        Je gebruikt de volgende knoppen:

        - F: pointer naar LINKS
        - J: pointer naar RECHTS
        - spatie: keuze bevestigen

        Er is geen tijdsdruk.

        (Druk op een willekeurige toets om een voorbeeld te zien.)
    KeyboardComponent instruct_cont_5
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_1
    CodeComponent setup_exp
      Begin Experiment:
        import os
        import os.path as op
        import pandas as pd
        import shutil
        import yaml
        import sys
        from glob import glob

        # Load params
        with open('params.yml', 'r') as params:
            custom_params = yaml.load(params)
            text_size = custom_params['text_size']
            wrap_width = custom_params['wrap_width']

            if sys.platform == 'darwin':
                wrap_width = 30

            face_size = custom_params['face_size']
            n_trials = int(custom_params['n_trials'])

        # Define variables dependent on subject
        subj_info_df = pd.read_csv('subject_info.csv')
        sub_nr = expInfo['participant']
        this_subj_df = subj_info_df.query('subject_id == @sub_nr')

        RL_order = this_subj_df['RL_order'].values[0]
        face_gender = this_subj_df['face_gender'].values[0]

        # Create new subject dir in which to store stims/logs
        sub_dir = op.join('logs', 'sub-%s' % sub_nr)
        if not op.isdir(sub_dir):
            os.makedirs(sub_dir)

        # Remove existing stuff
        existing_imgs = glob(op.join(sub_dir, '*.png'))
        existing_csvs = glob(op.join(sub_dir, '*.csv'))
        _ = [os.remove(f) for f in existing_imgs]
        _ = [os.remove(f) for f in existing_csvs]

        rewards_file = op.join(sub_dir, 'rewards.txt')
        if op.isfile(rewards_file):
            os.remove(rewards_file)
        else:
            open(rewards_file, 'a').close()

        if sys.platform[:3] == 'win':
            sys.path.append(op.abspath('deps'))
            stims_file = 'stims_windows.csv'
        else:
            stims_file = 'stims.csv'
    TextComponent welcome_txt_1
      startVal [time (s)] = 0.0
      pos = (0, 5)
      letterHeight = $text_size
      wrapWidth = wrap_width
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      text:
        Welkom bij dit experiment!

        Dit experiment gaat over de perceptie van gezichten en de invloed van associatief leren.

        Het experiment bestaat uit twee fases:
        - een uitgebreide beoordelings-fase
        - een leer-fase met een korte beoordelingsfase (x2)

        De leer-fase (met korte beoordeling daarna) doe je twee keer.
    ImageComponent setup_RL_image
      startVal [time (s)] = 0.0
      pos = (0, -3)
      size = (28, 7)
      image = pilot_RL_setup.png
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    TextComponent welcome_txt_1_2
      startVal [time (s)] = 0.0
      pos = (0, -10)
      text = (Druk op een willekeurige knop om door te gaan.)
      letterHeight = $text_size
      wrapWidth = wrap_width
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    KeyboardComponent welcome_resp_1
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_5
    CodeComponent practice_switch
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt = """
        Om het nog iets moeilijker te maken, krijg je straks
        niet één combinatie van 2 gezichten, maar TWEE combinaties
        van 2 gezichten! Je moet dus van iedere combinatie proberen
        te leren welke van de twee het meest "waardevolle" gezicht is!

        Om te checken of je het snapt, ga je dit leer-taakje even oefenen.
        Je krijg twee combinaties van gezichten te zien:

        1. Barack Obama vs. Bill Clinton,
        2. Donald Trump vs. George Bush

        De oefenfase duurt ongeveer 5 minuutjes. Ter herinnering:

        Om het LINKER gezicht te kiezen, druk op de F toets.
        Om het RECHTER gezicht te kiezen, druk op de J toets.

        (Druk op een willekeurige knop om te beginnen met de oefenronde!)
        """
            practice_reps = 1
        else:
            practice_skip_txt = """We slaan de oefenronde deze keer over.

        (Druk op een willekeurige toets om verder te gaan.)"""
            practice_reps = 0

        if expInfo['skip_practice'] == 'True':
            practice_reps = 0
    TextComponent instruct_RL_5_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent instruct_RL_5_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_4
    CodeComponent code
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_2 = """
        Na de feedback krijg je de twee gezichten te zien,
        maar nu één voor één. Hier hoef je NIKS bij te doen,
        alleen maar de gezichten te bekijken. Het is ook
        niet relevant voor de taak en bevat geen informatie
        over de waarde van de gezichten.

        (Druk op een willekeurige toets om verder te gaan.)
        """
        else:
            practice_skip_txt_2 = """
        Na de feedback krijg je wederom de twee gezichten één voor één te zien.
        Hier hoef je net zoals in de eerste sessie NIKS bij te doen,

        (Druk op een willekeurige toets om verder te gaan.)
        """
    TextComponent instruct_RL_4_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_2
      letterHeight = 0.4
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    KeyboardComponent instruct_RL_4_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine practice_RL_trial
    CodeComponent practice_feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
      End Routine:
        if practice_response.keys in (None, []):
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
            feedback_sign_opacity = 0
        elif practice_response.corr:
            feedback_txt = '(%.1f euro gewonnen)' % custom_params['RL_params']['win_amount']
            feedback_ori = 0
            feedback_color = 'Green'
            feedback_sign_opacity = 1
        elif not practice_response.corr:
            feedback_txt = feedback_txt_incorrect
            feedback_ori = 45
            feedback_color = 'Red'
            feedback_sign_opacity = 1
    ImageComponent practice_left_face
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      pos = (-5, 0)
      size = (7, 7)
      image [set every repeat] = $left_face
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    ImageComponent practice_right_face
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      pos = (5, 0)
      size = (7, 7)
      image [set every repeat] = $right_face
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    TextComponent practice_response_prompt
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      pos = (0, -6)
      letterHeight = text_size
      wrapWidth = wrap_width
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      text:
        Kies links ("f") of rechts ("j").
        Je hebt 3 seconden om te antwoorden!
    KeyboardComponent practice_response
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $rewarded_resp
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    GratingComponent fix_practice
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      size = (0.3, 0.3)
      tex = sin
      mask = raisedCos
      sf = 0
      texture resolution = 512
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    CodeComponent practice_money_tracker
      Begin Experiment:
        practice_money = custom_params['RL_params']['start_amount']
      End Routine:
        if practice_response.keys in (None, []):
            practice_money += 0
        else:
            if practice_response.corr:
                practice_money += custom_params['RL_params']['win_amount']
            else:
                if session_name == 'plusneu':
                    practice_money += 0
                elif session_name == 'plusmin':
                    practice_money -= custom_params['RL_params']['lose_amount']
  Routine practice_RL_feedback
    PolygonComponent practice_feedback_sign
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent practice_feedback_written_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      color [set every repeat] = $feedback_color
      pos = (0, -1)
      text [set every repeat] = $feedback_txt
      letterHeight = text_size
      wrapWidth = wrap_width
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  Routine practice_RL_views
    ImageComponent practice_left_face_show
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      size = (4, 4)
      image [set every repeat] = $left_face
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    ImageComponent practice_right_face_show
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      size = (4, 4)
      image [set every repeat] = $right_face
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    PolygonComponent fix_practice_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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    TextComponent not_relevant
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      pos = (0, 3)
      text = (Deze 'fase' is niet relevant ...)
      letterHeight = 0.3
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  Routine real_RL_trial
    CodeComponent real_feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
        counter_RL = 1
      End Routine:
        if real_RL_response.keys in (None, []):
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
            feedback_sign_opacity = 0
        elif real_RL_response.corr:
            feedback_txt = '(%.1f euro gewonnen)' % custom_params['RL_params']['win_amount']
            feedback_ori = 0
            feedback_color = 'Green'
            feedback_sign_opacity = 1
        elif not real_RL_response.corr:
            feedback_txt = feedback_txt_incorrect
            feedback_ori = 45
            feedback_color = 'Red'
            feedback_sign_opacity = 1
    ImageComponent real_left_face
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      pos = (-5, 0)
      size = face_size
      image [set every repeat] = $left_face
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    ImageComponent real_right_face
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      pos = (5, 0)
      size = face_size
      image [set every repeat] = $right_face
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    KeyboardComponent real_RL_response
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $rewarded_resp
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    GratingComponent fix_real
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      size = (0.3, 0.3)
      tex = sin
      mask = raisedCos
      sf = None
      texture resolution = 512
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    CodeComponent real_money_tracker
      Begin Experiment:
        real_money = dict(plusmin=custom_params['RL_params']['start_amount'],
                          plusneu=custom_params['RL_params']['start_amount'])
      End Routine:
        if real_RL_response.corr in (None, []):
            real_money[session_name] += 0
        else:
            if real_RL_response.corr:
                real_money[session_name] += custom_params['RL_params']['win_amount']
            else:
                if session_name == 'plusneu':
                    real_money[session_name] += 0
                elif session_name == 'plusmin':
                    real_money[session_name] -= custom_params['RL_params']['lose_amount']
  Routine real_RL_feedback
    PolygonComponent real_feedback_sign
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent real_feedback_written_txt
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      color [set every repeat] = $feedback_color
      pos = (0, -1)
      text [set every repeat] = $feedback_txt
      letterHeight = text_size
      wrapWidth = wrap_width
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  Routine real_RL_views
    ImageComponent real_left_face_show
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      size = (7.5, 10)
      image [set every repeat] = $left_face
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    ImageComponent real_right_face_show
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      size = (7.5, 10)
      image [set every repeat] = $right_face
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    PolygonComponent fix_real2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine instruct_RL_2_2
    TextComponent instruct_RL_2_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """
        Na je keuze krijg je direct feedback op je keuze.
        Als je keuze 'correct' is, dan zie je een groen plus teken (+)
        en WIN je %.1f euro.

        Als je keuze 'incorrect' is, dan zie je een rood kruis (x)
        en %s

        (Druk op een willekeurige toets om verder te gaan.)
        """ % ($custom_params['RL_params']['win_amount'], $RL_wrong_instruction)
    KeyboardComponent instruct_RL_2_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine begin_real_RL2
    CodeComponent code_3
      Begin Routine:
        if number_str == 'eerste':

            practice_skip_txt_4 = """
        Als alles duidelijk is, dan kan je beginnen met de echte leer-taak!

        In plaats van Amerikaanse (ex)presidenten, krijg je nu dezelfde
        gezichten te zien als die je beoordeeld hebt in de vorige fase.
        In totaal krijg je TWEE combinaties van 2 gezichten.

        In tegenstelling tot bij de oefentaak, telt het bedrag dat je
        hierbij verdiend WEL mee voor het uiteindelijke bedrag dat je
        mee naar huis mag nemen.

        Let op, de echte leer-taak duurt ongeveer 10-15 minuten (met pauzes tussendoor).
        Succes!

        (Druk op een toets om te beginnen met de echte taak.)
        """
        else:
            continueRoutine = False
    TextComponent begin_real_RL_txt_2
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_4
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent begin_real_RL_continue_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine overview_money
    TextComponent overview_money_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """Deze sessie heb je in totaal %.1f euro verdiend!

        (Druk op een toets om door te gaan.)
        """ % $real_money[$session_name]
    KeyboardComponent overview_money_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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    CodeComponent write_reward
      End Routine:
        with open(rewards_file, 'a') as rewards_file_f:
            rewards_file_f.write('%s rewards: %.1f\n' % (session_name, real_money[session_name]))
  Routine pause_RL
    CodeComponent pause_switch
      Begin Routine:
        if (real_trials.thisN + 1) % 34 != 0:
            continueRoutine = False
    TextComponent pause_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """Je kan even pauze nemen als je wilt!
        Het bedrag dat je deze sessie tot nu toe hebt verdiend: %.1f euro

        (Druk op een toets om weer verder te gaan.)""" % $real_money[$session_name]
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine post_rating_instruct
    CodeComponent ratingscale_switch_2
      Begin Routine:
        from custom_rating_scales import construct_rating_scale
        post_rating_scale = construct_rating_scale(rating_attribute, low_high=[rating_low, rating_high], win=win)

        if not rating_question_details:
            rating_question_details = ''
    TextComponent post_rating_instruct_common
      startVal [time (s)] = 0.0
      pos = (0, 8)
      letterHeight = (text_size + 0.5)
      wrapWidth = wrap_width
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      text:
        Bij de gezichten die straks in beeld komen
        moet je de volgende vraag beantwoorden:
    TextComponent pre_rating_instruct_txt_2
      startVal [time (s)] = 0.0
      pos = (0, 1)
      text [set every repeat] = $rating_question
      letterHeight = (text_size + 0.5)
      wrapWidth = wrap_width
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    TextComponent rating_press_to_continue_2
      startVal [time (s)] = 0.0
      pos = (0, -3)
      text [set every repeat] = $rating_question_details
      letterHeight = text_size
      wrapWidth = wrap_width
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    TextComponent click_to_continue_2
      startVal [time (s)] = 0.0
      pos = (0, -8)
      text = (Als de vraag duidelijk is, druk dan op een willekeurige toets om te beginnen.)
      letterHeight = text_size
      wrapWidth = wrap_width
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    KeyboardComponent post_rating_instruct_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine post_rating
    ImageComponent post_rating_img
      startVal [time (s)] = 0.5
      pos = (0, 1)
      size = face_size
      image [set every repeat] = $stim_file
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    RatingScaleComponent post_rating_scale
      startVal [time (s)] = 0.5
      marker = slider
      markerStart = 0
      showAccept = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.5
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  Routine pre_fix_2
    GratingComponent pre_fix_icon2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      size = (0.3, 0.3)
      tex = sin
      mask = raisedCos
      sf = 0
      texture resolution = 512
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  Routine pre_fix
    CodeComponent code_4
      Begin Routine:
        if number_str == 'tweede':
            continueRoutine = False
    GratingComponent pre_fix_icon
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      color = $[1.000,1.000,1.000]
      size = (0.3, 0.3)
      tex = sin
      mask = raisedCos
      sf = 0
      texture resolution = 512
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  Routine post_rating_intro
    TextComponent post_rating_intro_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        Nu ga je weer de gezichten beoordelen, zoals in fase 1.

        (Druk op een willekeurige knop om te beginnen.)
    KeyboardComponent post_rating_intro_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_4
    TextComponent welcome_txt_4
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text:
        Als de beoordelings-fase duidelijk is,
        dan kunnen we beginnen.

        (Druk op een knop om de eerste sessie te beginnen!)
    KeyboardComponent instruct_cont_6
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine end_of_session
    TextComponent end_of_session_txt
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        """Dit was het einde van de %s sessie!

        (Drop op een willekeurige toets om door te gaan.)""" % $number_str
    KeyboardComponent end_of_session_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine pause_rating
    TextComponent pause_rating_text
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text:
        Als je wilt, kan je nu even pauze nemen.

        (Om door te gaan, druk op een willekeurige toets.)
    KeyboardComponent pause_rating_response
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine select_faces
    CodeComponent select_faces_code
      Begin Routine:
        import os
        import os.path as op
        import pandas as pd
        import shutil
        import yaml
        from glob import glob
        from face_selection import select_stim_based_on_similarity

        rating_df.to_csv(op.join(sub_dir, 'sub-%s_face-ratings.csv' % sub_nr))

        if expInfo['skip_ratings']:
            print("Trying to find existing ratings for subject %s" % sub_nr)
            rating_df = pd.read_csv(op.join('test_data', 'sub-%s_face-ratings.csv' % sub_nr))

            if sys.platform[:3] == 'win':
                rating_df.stim_file = rating_df.stim_file.str.replace('/', '\\')

        selected_pairs = select_stim_based_on_similarity(rating_df, face_gender=face_gender,
                                                         distance_metric=custom_params['distance_metric'])
        reward_prob = [[['80', '20'], ['64', '36']], [['80', '20'], ['64', '36']]]

        session_df = dict(stim_csv=[], trial_csv=[], RL_wrong_instruction=[],
                          RL_wrong_instruction_n=[], feedback_txt_incorrect=[],
                          RL_session_notice=[], session_name=[])
        for i, this_RL_session in enumerate(RL_order.split('_')):

            learning_template = pd.read_csv('learning_template.csv')
            testing_template = pd.read_csv('testing_template.csv')

            # Loop over stimuli (4 faces for this session)
            stim_df = dict(stim_file=[], reward_prob=[])
            for ii, this_pair in enumerate(selected_pairs[i]):

                for iii, this_stim in enumerate(this_pair):
                    this_reward_prob = reward_prob[i][ii][iii]
                    orig_name = op.basename(this_stim).split('.')[0]
                    new_name = '%s_rewardprob-%s_session-%s.png' % (orig_name, this_reward_prob, this_RL_session)
                    new_file = op.join(sub_dir, new_name)
                    shutil.copy(this_stim, new_file)

                    stim_df['stim_file'].append(new_file)
                    stim_df['reward_prob'].append(this_reward_prob)

                    learning_template = learning_template.replace('rewardprob-%s' % this_reward_prob, new_file)
                    testing_template = testing_template.replace('rewardprob-%s' % this_reward_prob, new_file)

            stim_df = pd.DataFrame(stim_df)
            stim_file = op.join(sub_dir, 'stims_session-%s.csv' % this_RL_session)
            stim_df.to_csv(stim_file, index=False)

            learning_file = op.join(sub_dir, 'trials_phase-learning_session-%s.csv' % this_RL_session)
            learning_template.to_csv(learning_file, index=False)
            testing_file = op.join(sub_dir, 'trials_phase-testing_session-%s.csv' % this_RL_session)
            testing_template.to_csv(testing_file, index=False)
            session_df['trial_csv'].append(learning_file)
            session_df['stim_csv'].append(stim_file)
            session_df['session_name'].append(this_RL_session)

            if this_RL_session == 'plusmin':
                session_df['RL_wrong_instruction'].append('VERLIES je %.1f euro.' % custom_params['RL_params']['lose_amount'])
                session_df['RL_wrong_instruction_n'].append('gestraft wordt, doordat je %.1f euro verliest.' % custom_params['RL_params']['lose_amount'])
                session_df['feedback_txt_incorrect'].append('(%.1f euro verloren)' % custom_params['RL_params']['lose_amount'])
            else:
                session_df['RL_wrong_instruction'].append('win je niks.')
                session_df['RL_wrong_instruction_n'].append('dat je niks wint.')
                session_df['feedback_txt_incorrect'].append('(0 euro gewonnen)')

            if i == 0:
                session_df['RL_session_notice'].append(' ')
            elif i == 1 and this_RL_session == 'plusmin':
                session_df['RL_session_notice'].append("Let op: in de eerste sessie won je niks als je keus fout was, "
                                                       "maar in deze sessie VERLIES je %.1f euro als je het fout hebt!" % custom_params['RL_params']['lose_amount'])
            elif i == 1 and this_RL_session == 'plusneu':
                session_df['RL_session_notice'].append("Let op: in de eerste sessie verloor je %.1f euro als je keus fout was, "
                                                       "maar in deze sessie win/verlies je NIKS als je het fout hebt!" % custom_params['RL_params']['lose_amount'])

        session_df['number_str'] = ['eerste', 'tweede']
        session_df['practice_reps'] = [1, 0]
        session_df = pd.DataFrame(session_df)
        session_file = op.join(sub_dir, 'sessions_phase-learning.csv')
        session_df.to_csv(session_file, index=False)

        # Check sequence
        if RL_order == 'plusmin_plusneu':
            pass
        elif RL_order == 'plusneu_plusmin':
            pass
        else:
            raise ValueError("Cannot determine RL_order (should be 'plusmin_plusneu' or 'plusneu_plusmin')!")
  Routine instruct_RL_2_1
    TextComponent instruct_RL_2_txt_4
      startVal [time (s)] = 0.0
      letterHeight = text_size
      wrapWidth = wrap_width
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      text [set every repeat]:
        Let op! Er bestaan geen absoluut ‘correcte’ antwoorden,
        maar sommige gezichten hebben een hogere kans om gevolgd
        te worden door een ‘correct’ feedback (groen plus-symbool).

        Probeer steeds het gezicht te selecteren met het hoogste
        kans op de 'correct' feedback.

        Je hebt 3 seconden om te kiezen.

        (Druk op een willekeurige knop om verder te gaan.)
    KeyboardComponent instruct_RL_2_resp_3
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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Flow
  Routine welcome_1
  Routine welcome_2
  Routine welcome_3
  Routine example_scale
  Routine welcome_4
  LoopInitiator pre_rating_scales_loop loopType="TrialHandler"
    nReps = $(0 if expInfo['skip_ratings'] == 'True' else 1)
    conditionsFile = ratings.csv
    loopType = random
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    conditions:
      [OrderedDict([('phase', 'rating,arousal,Hoe geactiveerd maakt dit gezicht je?,"Je beoordeelt dit op een schaal van \'Helemaal niet geactiveerd\' tot \'Zeer geactiveerd\'. Met \'geactiveerd\' bedoelen we dat het het gezicht je alert, energiek, en/of gespannen doet voelen. Met \'niet geactiveerd\' bedoelen we dat het gezicht je kalm, ontspannen, en/of rustig doet voelen.",Helemaal niet geactiveerd,Zeer geactiveerd'), ('rating_attribute', None), ('rating_question', None), ('rating_question_details', None), ('rating_low', None), ('rating_high', None)]),
      OrderedDict([('phase', 'rating'), ('rating_attribute', 'valence'), ('rating_question', 'Hoe ervaar jij dit gezicht?'), ('rating_question_details', "Je beoordeelt dit op een schaal van 'Zeer onprettig' tot 'Zeer prettig'."), ('rating_low', 'Zeer onprettig'), ('rating_high', 'Zeer prettig')]),
      OrderedDict([('phase', 'rating'), ('rating_attribute', 'attractiveness'), ('rating_question', 'Hoe aantrekkelijk vind jij dit gezicht?'), ('rating_question_details', "Je beoordeelt dit op een schaal van 'Zeer onaantrekkelijk' tot 'Zeer aantrekkelijk'."), ('rating_low', 'Zeer onaantrekkelijk'), ('rating_high', 'Zeer aantrekkelijk')]),
      OrderedDict([('phase', 'rating'), ('rating_attribute', 'trustworthiness'), ('rating_question', 'Hoe betrouwbaar vind jij dit gezicht?'), ('rating_question_details', "Je beoordeelt dit op een schaal van 'Zeer onbetrouwbaar' tot 'Zeer betrouwbaar'."), ('rating_low', 'Zeer onbetrouwbaar'), ('rating_high', 'Zeer betrouwbaar')])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
    Routine pre_rating_instruct
    LoopInitiator pre_rating_stims_loop loopType="TrialHandler"
      nReps = 1
      conditionsFile = $stims_file
      loopType = random
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      Routine pre_rating
    LoopTerminator pre_rating_stims_loop
    Routine pause_rating
  LoopTerminator pre_rating_scales_loop
  Routine select_faces
  LoopInitiator session_loop loopType="TrialHandler"
    nReps = 1
    conditionsFile = $session_file
    loopType = sequential
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    Routine instruct_RL_1
    Routine instruct_RL_2
    Routine instruct_RL_2_1
    Routine instruct_RL_2_2
    Routine instruct_RL_3
    Routine instruct_RL_5
    Routine pre_fix
    LoopInitiator practice_trials loopType="TrialHandler"
      nReps = $practice_reps
      conditionsFile = practice_trials.csv
      loopType = random
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      conditions:
        [OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/clinton.jpg'), ('right_face', 'stims/practice_stims/obama.jpg'), ('correct_resp', 'j'), ('correct_face', 'stims/practice_stims/obama.jpg')])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
      Routine practice_RL_trial
      Routine practice_RL_feedback
    LoopTerminator practice_trials
    Routine begin_real_RL
    Routine begin_real_RL2
    Routine pre_fix_2
    LoopInitiator real_trials loopType="TrialHandler"
      nReps = $(int(n_trials / 50))
      conditionsFile = $trial_csv
      loopType = random
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      Routine real_RL_trial
      Routine real_RL_feedback
      Routine pause_RL
    LoopTerminator real_trials
    Routine overview_money
    Routine post_rating_intro
    LoopInitiator post_rating_loop loopType="TrialHandler"
      nReps = 1
      conditionsFile = ratings.csv
      loopType = random
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      conditions:
        [OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'valence'), ('question', 'Hoe prettig/onprettig ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'arousal'), ('question', 'Hoe intens ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'attractiveness'), ('question', 'Hoe aantrekkelijk vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'trustworthiness'), ('question', 'Hoe betrouwbaar vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'dominance'), ('question', 'Hoe dominant vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')])]
      Routine post_rating_instruct
      LoopInitiator post_neutral_face_loop loopType="TrialHandler"
        nReps = 1
        conditionsFile = $stim_csv
        loopType = random
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        Routine post_rating
      LoopTerminator post_neutral_face_loop
    LoopTerminator post_rating_loop
    Routine end_of_session
  LoopTerminator session_loop
  Routine thanks
